PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = expInfo['expName'] + '' + expInfo['participant'] + '' + expInfo['session']
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Feature vs Conjunction exp done
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Visual Search Task

        You will see different shapes on the screen.

        Your task is to determine whether the red circle is present.

        Press P if the red circle is present.

        Press A if the red circle is absent.

        Respond as quickly and accurately as possible.

        You will first complete some practice trials

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        import random

        search_stimuli = []

        n_items = int(setSize)
        present = str(targetPresence).strip().lower() in ['present', '1']
        condition = str(searchType).strip().lower()
        correct_answer='p' if present else 'a'

        positions = []

        while len(positions) < n_items:
            x = random.uniform(-0.7, 0.7)
            y = random.uniform(-0.45, 0.45)

            valid = True

            for pos in positions:
                if abs(x - pos[0]) < 0.12 and abs(y - pos[1]) < 0.12:
                    valid = False
                    break

            if valid:
                positions.append((x, y))

        if condition == 'feature':

            if present == 1:

                target_position = random.randrange(n_items)

                for i in range(n_items):

                    if i == target_position:
                        shape = visual.Circle(
                            win,
                            radius=0.05,
                            fillColor='red',
                            lineColor='red',
                            pos=positions[i]
                        )
                    else:
                        shape = visual.Circle(
                            win,
                            radius=0.05,
                            fillColor='blue',
                            lineColor='blue',
                            pos=positions[i]
                        )

                    search_stimuli.append(shape)

            else:

                for i in range(n_items):

                    shape = visual.Circle(
                        win,
                        radius=0.05,
                        fillColor='blue',
                        lineColor='blue',
                        pos=positions[i]
                    )

                    search_stimuli.append(shape)


        elif condition == 'conjunction':

            if present == 1:

                target_position = random.randrange(n_items)

                for i in range(n_items):

                    if i == target_position:

                        shape = visual.Circle(
                            win,
                            radius=0.05,
                            fillColor='red',
                            lineColor='red',
                            pos=positions[i]
                        )

                    else:

                        if random.choice([True, False]):

                            shape = visual.Polygon(
                                win,
                                edges=3,
                                radius=0.05,
                                fillColor='red',
                                lineColor='red',
                                pos=positions[i]
                            )

                        else:

                            shape = visual.Circle(
                                win,
                                radius=0.05,
                                fillColor='blue',
                                lineColor='blue',
                                pos=positions[i]
                            )

                    search_stimuli.append(shape)

            else:

                for i in range(n_items):

                    if random.choice([True, False]):

                        shape = visual.Polygon(
                            win,
                            edges=3,
                            radius=0.05,
                            fillColor='red',
                            lineColor='red',
                            pos=positions[i]
                        )

                    else:

                        shape = visual.Circle(
                            win,
                            radius=0.05,
                            fillColor='blue',
                            lineColor='blue',
                            pos=positions[i]
                        )

                    search_stimuli.append(shape)
      Each Frame:
        for shape in search_stimuli:
            shape.draw()
      End Routine:
        if response.keys == correct_answer:
            correct = 1
        else:
            correct = 0

        thisExp.addData('search_type', condition)
        thisExp.addData('display_size', n_items)
        thisExp.addData('target_presence', targetPresence)
        thisExp.addData('correct_answer', correct_answer)
        thisExp.addData('participant_response', response.keys)
        thisExp.addData('correct', correct)
        thisExp.addData('rt', response.rt)
    KeyboardComponent response
      allowedKeys [set every repeat] = 'p','a'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.05
      store = first key
      storeCorrect = True
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  Routine practice_instructions
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    TextComponent instruction
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        PRACTICE

        You will now complete some practice trials.

        Remember:
        P = target present
        A = target absent

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_You
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thankyou for participating

        Press SPACE for completing
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_Instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Main Experiment

        Determine whether the target is present or absent.

        Target = Red Circle

         Press P = Target Present
         Press A = Target Absent

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine practice_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_trials 4.0.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'searchType': 'feature', 'setSize': 1, 'targetPresence': 'present'},
      {'searchType': 'feature', 'setSize': 1, 'targetPresence': 'absent'},
      {'searchType': 'feature', 'setSize': 5, 'targetPresence': 'present'},
      {'searchType': 'feature', 'setSize': 5, 'targetPresence': 'absent'},
      {'searchType': 'feature', 'setSize': 15, 'targetPresence': 'present'},
      {'searchType': 'feature', 'setSize': 15, 'targetPresence': 'absent'},
      {'searchType': 'feature', 'setSize': 30, 'targetPresence': 'present'},
      {'searchType': 'feature', 'setSize': 30, 'targetPresence': 'absent'},
      {'searchType': 'conjunction', 'setSize': 1, 'targetPresence': 'present'},
      {'searchType': 'conjunction', 'setSize': 1, 'targetPresence': 'absent'},
      {'searchType': 'conjunction', 'setSize': 5, 'targetPresence': 'present'},
      {'searchType': 'conjunction', 'setSize': 5, 'targetPresence': 'absent'},
      {'searchType': 'conjunction', 'setSize': 15, 'targetPresence': 'present'},
      {'searchType': 'conjunction', 'setSize': 15, 'targetPresence': 'absent'},
      {'searchType': 'conjunction', 'setSize': 30, 'targetPresence': 'present'},
      {'searchType': 'conjunction', 'setSize': 30, 'targetPresence': 'absent'}]
    Routine Main_trial
  LoopTerminator practice_loop
  Routine Main_Instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = final condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'searchType': 'Feature', 'setSize': 1, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'Absent'},
      {'searchType': 'Feature', 'setSize': 15, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 1, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 15, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 1, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 15, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 15, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 1, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 1, 'targetPresence': 'present'},
      {'searchType': 'Feature', 'setSize': 15, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 5, 'targetPresence': 'absent'},
      {'searchType': 'Feature', 'setSize': 30, 'targetPresence': 'present'}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
    Routine Main_trial
  LoopTerminator main_loop
  Routine Thank_You
